scenario = "Oddball_discrimination_durations_130 - Behavioral";

no_logfile = false;
scenario_type = trials;
active_buttons = 1;
button_codes = 1;  
default_background_color = 0, 0, 0;
default_text_color = 255, 0, 255;
default_font_size = 18;  
active_buttons = 1;
button_codes = 1;
write_codes = true; 
pulse_width = 10;
pcl_file = "Oddball_discrimination_durations_130 - Behavioral.pcl";

begin;

# port codes:
# 7 = 100ms 1000Hz standard.
# 9 = 130ms 1000Hz deviant.

#Load the auditory stimuli:
sound { wavefile { filename = "1000hz_100ms_10msfade.wav"; preload = true; }; } stdtone;
sound { wavefile { filename = "1000hz_130ms_13msfade.wav"; preload = true; }; } devtone;



picture {
} default;

picture {
   text {
      caption = "End of Block";
      font_size = 30;
      text_align = align_center;
      font_color = 255, 0, 255;
   } end_block_txt;
	x = 0; y = 0;   
} end_block_pic;

trial {
trial_duration = 100;
	stimulus_event {
		picture default;
		code = "201 start recording";  
		port_code = 201;  
		time = 0;
	};
} start_saving;

trial {
trial_duration = 2000;
	stimulus_event {
		picture default;
		code = "130 DEV";  
		port_code = 130;  
		time = 0;
	};
} nothing_trial;

trial {
trial_duration = 800;
	stimulus_event {
		picture default;
		time = 0;
	}event_isi;
} isi_trial;

trial {
	stimulus_event {
		sound stdtone;  
		time = 0;     
		code = "standard";  
		port_code = 7;  
	} event_standard;
}standard_trial;
  
trial {
	stimulus_event {
		sound devtone;   
		time = 0;     
		code = "deviant";  
		port_code = 9;  
	} event_deviant;
}deviant_trial;

trial {
	trial_duration = forever;
	trial_type = first_response; 
	terminator_button = 1;
	stimulus_event {
      picture end_block_pic;
	code = "200 pause recording";  
	port_code = 200; 
   } event_end_block;  
} end_block_trial;





