#  port code 201 = start recording
#  port code 200 = pause recording
#  port code 25 = standard (100ms sound) isi = 1700 soa = 1800
#  port code 27 = deviant  (180ms sound) isi = 1620 soa = 1800

scenario = "tone_oddball_1800SOA";

no_logfile = false;
scenario_type = trials;

default_background_color = 0, 0, 0;
default_text_color = 255, 0, 255;
default_font_size = 18;  

write_codes = true; 
pulse_width = 10;
pcl_file = "tone_oddball_1800SOA.pcl";

begin;

#Load the auditory stimuli:
sound { wavefile { filename = "1000Hz_100ms.wav"; preload = true; }; } standard_tone;
sound { wavefile { filename = "1000Hz_180ms.wav"; preload = true; }; } deviant_tone;


picture {
} default;

trial {
trial_duration = 2000;
	stimulus_event {
		picture default;
		code = "1800 ISI";  
		port_code = 201;  
		time = 0;
	};
} nothing_trial;

trial {
trial_duration = 1700;
	stimulus_event {
		nothing{};
		time = 0;
	}event_isi;
} isi_trial;

trial {
	stimulus_event {
		sound standard_tone;  
		time = 0;     
		code = "standard";  
		port_code = 25;  
	} event_standard;
}standard_trial;
  
trial {
	stimulus_event {
		sound deviant_tone;   
		time = 0;     
		code = "deviant";  
		port_code = 27;  
	} event_deviant;
}deviant_trial;

trial {
trial_duration = 2000;
	stimulus_event {
		nothing{};
		code = "1800 ISI";  
		port_code = 200;  
		time = 0;
      } event_end_block;  
   } end_block_trial;